<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Devices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ClockSynchronizer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ClockSynchronizer.bonsai">
                          <PortName>COM1</PortName>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>VideoController</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="GlobalTriggerFrequency" />
                          <Property Name="LocalTriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:CameraController.bonsai">
                          <PortName>COM2</PortName>
                          <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
                          <LocalTriggerFrequency>125</LocalTriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraTop</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SerialNumber" />
                          <Property Name="Gain" />
                          <Property Name="Binning" />
                          <Property Name="ExposureTime" />
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                          <ExposureTime>5000</ExposureTime>
                          <SerialNumber>12345678</SerialNumber>
                          <Gain>0</Gain>
                          <Binning>1</Binning>
                          <FrameEvents>CameraTop</FrameEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraPatch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SerialNumber" />
                          <Property Name="Gain" />
                          <Property Name="Binning" />
                          <Property Name="ExposureTime" />
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                          <TriggerSource>LocalTrigger</TriggerSource>
                          <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                          <ExposureTime>3000</ExposureTime>
                          <SerialNumber>23456789</SerialNumber>
                          <Gain>0</Gain>
                          <Binning>2</Binning>
                          <FrameEvents>CameraPatch1</FrameEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="WheelDisplacement" />
                          <Property Name="PelletDelivered" />
                          <Property Name="DeliverPellet" />
                          <Property Name="PatchEvents" />
                          <Property Name="Radius" />
                          <Property Name="SampleRate" />
                          <Property Name="ResetFeeder" />
                          <Property Name="DueTime" />
                          <Property Name="Count" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:UndergroundFeeder.bonsai">
                          <PatchEvents>Patch1Events</PatchEvents>
                          <SampleRate>SampleRate500Hz</SampleRate>
                          <DeliverPellet>Patch1DeliverPellet</DeliverPellet>
                          <PelletDelivered>Patch1PelletDelivered</PelletDelivered>
                          <DueTime>PT1S</DueTime>
                          <Count>3</Count>
                          <ResetFeeder>Patch1ResetFeeder</ResetFeeder>
                          <PortName>COM3</PortName>
                          <Radius>-4</Radius>
                          <WheelDisplacement>Patch1WheelDisplacement</WheelDisplacement>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Nest</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="BaselineWeightTrigger" />
                          <Property Name="FilterWindow" />
                          <Property Name="WeightData" />
                          <Property Name="TareCommands" />
                          <Property Name="TareEvents" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:WeightScale.bonsai">
                          <PortName>COM4</PortName>
                          <BaselineWeightTrigger>NestBaselineWeight</BaselineWeightTrigger>
                          <FilterWindow>40</FilterWindow>
                          <WeightData>NestWeightData</WeightData>
                          <TareCommands>NestTareCommands</TareCommands>
                          <TareEvents>NestTareEvents</TareEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>NestRfid1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="HardwareNotificationsState" />
                          <Property Name="PortName" />
                          <Property Name="RfidEvents" />
                          <Property Name="Location" />
                          <Property Name="InboundRfidDetected" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:RfidReader.bonsai">
                          <HardwareNotificationsState>None</HardwareNotificationsState>
                          <PortName>COM5</PortName>
                          <RfidEvents>NestRfid1Events</RfidEvents>
                          <Location>
                            <X>1155</X>
                            <Y>664</Y>
                          </Location>
                          <InboundRfidDetected>NestRfid1InboundDetected</InboundRfidDetected>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch1Rfid</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="HardwareNotificationsState" />
                          <Property Name="PortName" />
                          <Property Name="RfidEvents" />
                          <Property Name="Location" />
                          <Property Name="InboundRfidDetected" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:RfidReader.bonsai">
                          <HardwareNotificationsState>None</HardwareNotificationsState>
                          <PortName>COM6</PortName>
                          <RfidEvents>Patch1RfidEvents</RfidEvents>
                          <Location>
                            <X>902</X>
                            <Y>565</Y>
                          </Location>
                          <InboundRfidDetected>Patch1RfidInboundDetected</InboundRfidDetected>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>AudioAmbient</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DeviceName" />
                          <Property Name="SampleRate" />
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:AudioSource.bonsai">
                          <DeviceName>Microphone (UltraMic 192K 16 bi</DeviceName>
                          <SampleRate>192000</SampleRate>
                          <Name>AudioAmbient</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrackingTop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameEvents" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTop</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Mask" />
                    <Property Name="ThresholdValue" />
                    <Property Name="TrackingEvents" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:PositionTracking.bonsai">
                    <ThresholdValue>83</ThresholdValue>
                    <Mask>Config\ArenaMask-AEON-template.png</Mask>
                    <TrackingCount>1</TrackingCount>
                    <TrackingEvents>TrackingTop</TrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ActivityCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTop</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ActivityTracking.bonsai">
                    <Regions>
                      <ArrayOfPoint>
                        <Point>
                          <X>76</X>
                          <Y>431</Y>
                        </Point>
                        <Point>
                          <X>404</X>
                          <Y>431</Y>
                        </Point>
                        <Point>
                          <X>404</X>
                          <Y>665</Y>
                        </Point>
                        <Point>
                          <X>76</X>
                          <Y>665</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Regions>
                    <ThresholdValue>10</ThresholdValue>
                    <TrackingEvents>ActivityCenter</TrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ActivityArena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraTop</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ActivityTracking.bonsai">
                    <Regions xsi:nil="true" />
                    <ThresholdValue>10</ThresholdValue>
                    <TrackingEvents>ActivityArena</TrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ActiveRegion</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="NestRegion" />
                    <Property Name="Patch1Region" />
                    <Property Name="ArenaCenter" />
                    <Property Name="ArenaInnerRadius" />
                    <Property Name="ArenaOuterRadius" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ActiveRegion.bonsai">
                    <NestRegion>
                      <ArrayOfPoint>
                        <Point>
                          <X>1273</X>
                          <Y>518</Y>
                        </Point>
                        <Point>
                          <X>1183</X>
                          <Y>517</Y>
                        </Point>
                        <Point>
                          <X>1183</X>
                          <Y>623</Y>
                        </Point>
                        <Point>
                          <X>1275</X>
                          <Y>615</Y>
                        </Point>
                      </ArrayOfPoint>
                    </NestRegion>
                    <Patch1Region>
                      <ArrayOfPoint>
                        <Point>
                          <X>550</X>
                          <Y>819</Y>
                        </Point>
                        <Point>
                          <X>567</X>
                          <Y>830</Y>
                        </Point>
                        <Point>
                          <X>558</X>
                          <Y>847</Y>
                        </Point>
                        <Point>
                          <X>541</X>
                          <Y>832</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Patch1Region>
                    <Patch2Region>
                      <ArrayOfPoint>
                        <Point>
                          <X>550</X>
                          <Y>819</Y>
                        </Point>
                        <Point>
                          <X>567</X>
                          <Y>830</Y>
                        </Point>
                        <Point>
                          <X>558</X>
                          <Y>847</Y>
                        </Point>
                        <Point>
                          <X>541</X>
                          <Y>832</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Patch2Region>
                    <Patch3Region>
                      <ArrayOfPoint>
                        <Point>
                          <X>550</X>
                          <Y>819</Y>
                        </Point>
                        <Point>
                          <X>567</X>
                          <Y>830</Y>
                        </Point>
                        <Point>
                          <X>558</X>
                          <Y>847</Y>
                        </Point>
                        <Point>
                          <X>541</X>
                          <Y>832</Y>
                        </Point>
                      </ArrayOfPoint>
                    </Patch3Region>
                    <ArenaCenter>
                      <X>680</X>
                      <Y>565</Y>
                    </ArenaCenter>
                    <ArenaInnerRadius>480</ArenaInnerRadius>
                    <ArenaOuterRadius>502</ArenaOuterRadius>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ModelPathController</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                    <Property Name="PathName" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:PathController.bonsai">
                    <Path>Z:\aeon\data\processed</Path>
                    <PathName>ModelPathPrefix</PathName>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PoseTrackingTop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ModelPath" />
                    <Property Name="PathPrefix" />
                    <Property Name="FrameEvents" />
                    <Property Name="CentroidMinConfidence" />
                    <Property Name="IdentityMinConfidence" />
                    <Property Name="PartMinConfidence" />
                    <Property Name="FrameStep" />
                    <Property Name="PoseTrackingEvents" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\PoseTracking.bonsai">
                    <ModelPath />
                    <PathPrefix>ModelPathPrefix</PathPrefix>
                    <FrameEvents>CameraTop</FrameEvents>
                    <CentroidMinConfidence xsi:nil="true" />
                    <IdentityMinConfidence xsi:nil="true" />
                    <PartMinConfidence xsi:nil="true" />
                    <FrameStep>3</FrameStep>
                    <PoseTrackingEvents>PoseTrackingTop</PoseTrackingEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Declarations</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="aeon-env:WeightMeasurement">
              <rx:Name>SubjectWeight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(sys:Byte)">
              <rx:Name>Patch1MissedPellets</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(sys:Int32)">
              <rx:Name>BaselineTrigger</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentStateMetadata)">
              <rx:Name>EnvironmentState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentSubjectStateMetadata)">
              <rx:Name>SubjectState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentSubjectStateMetadata)">
              <rx:Name>SubjectStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(aeon-env:EnvironmentSubjectStateMetadata)">
              <rx:Name>SubjectStop</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingTop</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value[0].Centroid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Histogram2D">
                <dsp:MinX>0</dsp:MinX>
                <dsp:MaxX>1440</dsp:MaxX>
                <dsp:MinY>0</dsp:MinY>
                <dsp:MaxY>1080</dsp:MaxY>
                <dsp:BinsX>288</dsp:BinsX>
                <dsp:BinsY>216</dsp:BinsY>
                <dsp:Normalize>false</dsp:Normalize>
                <dsp:Accumulate>true</dsp:Accumulate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Scale>20</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:RepeatEverySubject.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.03S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Heatmap</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:PelletMonitor.bonsai">
              <PelletCommand>Patch1Events</PelletCommand>
              <PelletDelivered>Patch1PelletDelivered</PelletDelivered>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Patch1PelletMonitor</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Patch1PelletMonitorValue</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1TimeSinceLastVisit</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
"Time Since Last Visit (s)" as Id,
it as Patch1)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.05S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimeSinceLastVisit</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1WheelDisplacement</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
"Total Distance Travelled (cm)" as Id,
it as Patch1)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.05S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TotalDistanceTravelled</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:TimeSpentOnWheel.bonsai">
              <Patch>Patch1Events</Patch>
              <WheelPatch>Patch1WheelDisplacement</WheelPatch>
              <Threshold>0.0003</Threshold>
              <LowPass>1</LowPass>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Patch1TimeSpent</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1TimeSpent</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimeSinceLastEvent.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Patch1TimeSinceLastVisit</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PoseTrackingTop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PoseIdentityMatching</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SubjectPoses</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectPoses</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InArena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2,Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Center" />
                    <Property Name="Radius" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>InArena</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="harp:ConvertTimestamped">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Centroid.Position</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Center" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="aeon:DistanceFromPoint">
                            <aeon:Value>
                              <aeon:X>711</aeon:X>
                              <aeon:Y>539</aeon:Y>
                            </aeon:Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Radius" />
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>474</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="11" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SubjectsInArena</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SubjectIdentities</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Identity</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PoseTrackingTop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WindowTrigger">
                <rx:Count xsi:nil="true" />
                <rx:TimeSpan>PT5S</rx:TimeSpan>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Distinct" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StableSubjectsInArena</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NestWeightData</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BaselinedWeight</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StableWeight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Confidence</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ConfidenceThreshold" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SubjectOnScale</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="WeightThreshold" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>10</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SubjectWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StableSubjectsInArena</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectPoses</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SingleSubjectInArena</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Count</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LabeledWeight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3.Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Expression>Item1.Item2[0] != Item2.Identity</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1.Item1 as Weight,
Item2.Identity as Identity,
Item2.IdentityIndex as IdentityIndex)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings />
                    <Selector>it,Weight.Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LabeledWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LabeledWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:GroupByTime">
                <aeon:ChunkSize>1</aeon:ChunkSize>
                <aeon:ClosingDuration>PT1S</aeon:ClosingDuration>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectPoses</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Identity as Identity,
IdentityIndex as IdentityIndex)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="rx:OrderBy">
                    <rx:KeySelector>IdentityIndex</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageWeights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Identity</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1,Item2.Identity</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>double(Item2.Weight.Value)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ToList" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:DescriptiveStatistics" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Mean</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="1" To="11" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>AverageWeights</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectStart</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.ReferenceWeight</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.Timestamp as Timestamp,
Item1.Value as CurrentWeight,
100 * Item1.Value / Item2 as CurrentPercent)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PercentWeightLoss</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1PelletDelivered</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:EnvironmentCondition.bonsai">
              <Value>Experiment</Value>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PersistentCounter.bonsai">
              <Name>Patch1TotalPelletsDelivered</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1MissedPellets</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Environment:EnvironmentCondition.bonsai">
              <Value>Experiment</Value>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PersistentCounter.bonsai">
              <Name>Patch1TotalMissedPellets</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NestRfid1InboundDetected</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Seconds as Seconds,
Value.Location as Location,
Value.TagId as TagId,
"NestRfid1" as Name,
3 as Index)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Patch1RfidInboundDetected</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Seconds as Seconds,
Value.Location as Location,
Value.TagId as TagId,
"Patch1" as Name,
5 as Index)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings />
              <Selector>Seconds,Location,TagId,Name,Index</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="p1:RfidTaggedMeasurement" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RfidMeasurements</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="37" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="45" To="48" Label="Source1" />
            <Edge From="45" To="49" Label="Source2" />
            <Edge From="46" To="48" Label="Source2" />
            <Edge From="47" To="48" Label="Source3" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="53" To="55" Label="Source1" />
            <Edge From="54" To="55" Label="Source2" />
            <Edge From="55" To="59" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source2" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="62" To="65" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source2" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="72" Label="Source1" />
            <Edge From="72" To="73" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="78" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source2" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>